PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MRSurvey
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Routines
  Routine survey1
    TextboxComponent age_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = What’s your age?
      units = height
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    TextboxComponent gender_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = What’s your gender?
      units = height
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    TextboxComponent handedness_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = What’s your handedness?
      units = height
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    ButtonComponent cont_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0
      text = Click here to continue
      units = height
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  Routine survey2
    TextboxComponent ADHD_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Have you been diagnosed with ADHD?
      units = height
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    TextboxComponent reading_disabilities_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Have you been diagnosed with any reading disabilities?
      units = height
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    ButtonComponent close_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 1
      text = Click here when done
      units = height
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Flow
  Routine survey1
  Routine survey2
